PsychoPy2experiment version="2026.2.2"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Simple Reaction TIme 1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    PolygonComponent target
      fillColor = white
      pos = (-300, 0)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instruction_
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is to press Y when you see a square.

        Press SPACE when you are ready to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      text = Thank you!
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Flow
  Routine instruction_
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
  Routine Thank_you
